PsychoPy2experiment version="1.83.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = COND_B_Trg
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine GO_5
    TextComponent text_43
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_44
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_45
      text = X
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    KeyboardComponent key_resp_GO_5
      correctAns = space
      storeCorrect = True
      stopVal [frame N] = 108
      durationEstim = 0.6
      forceEndRoutine = True
      startEstim = 1.2
      allowedKeys = 'space'
      startVal [frame N] = 72
      store = first key
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  Routine over_correct
    TextComponent text_31
      text [set every repeat] = $j
      stopVal [frame N] = 24
      durationEstim = 0.4
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_32
      text [set every repeat] = $k
      stopVal [frame N] = 60
      durationEstim = 0.6
      startEstim = 0.4
      startVal [frame N] = 24
      letterHeight = 0.3
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  Routine trial_type_select
    CodeComponent code_2
      Begin Experiment:
        go_5_run = 0
        go_8_run = 0
        go_11_run = 0
        filler_5_run = 0
        filler_8_run = 0
        filler_11_run = 0
      Begin Routine:
        if Condition == 'GO' and length == 5:
            go_5_run = 1
            go_8_run = 0
            go_11_run = 0
            filler_5_run = 0
            filler_8_run = 0
            filler_11_run = 0
        if Condition == 'GO' and length == 8:
            go_5_run = 0
            go_8_run = 1
            go_11_run = 0
            filler_5_run = 0
            filler_8_run = 0
            filler_11_run = 0
        if Condition == 'GO' and length == 11:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 1
            filler_5_run = 0
            filler_8_run = 0
            filler_11_run = 0
        if Condition == 'FILLER' and length == 5:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            filler_5_run = 1
            filler_8_run = 0
            filler_11_run = 0
        if Condition == 'FILLER' and length == 8:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            filler_5_run = 0
            filler_8_run = 1
            filler_11_run = 0
        if Condition == 'FILLER' and length == 11:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            filler_5_run = 0
            filler_8_run = 0
            filler_11_run = 1
    TextComponent filler_while_computing
      text [set every repeat] = $a
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0.0
      letterHeight = 0.3
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  Routine block_select2
    CodeComponent code_3
      Begin Experiment:
        wrong_run = 0
        cond_run = 0
      Begin Routine:
        if key_resp_STOP.corr == 1:
            wrong_run = 1
            cond_run = 0
        if key_resp_STOP.corr == 0:
            wrong_run = 0
            cond_run = 1
  Routine over_select
    CodeComponent code_4
      Begin Experiment:
        over_wrong_run = 1
        over_correct_run = 0
      Begin Routine:
        if key_resp_overSTOP.corr == 1:
            over_wrong_run = 1
            over_correct_run = 0
        if key_resp_overSTOP.corr == 0:
            over_correct_run = 1
            over_wrong_run = 0
  Routine set_rep
    CodeComponent code_6
      Begin Routine:
        rep = 0
  Routine over_respond
    TextComponent text_30
      text [set every repeat] = $j
      stopVal [frame N] = 12
      durationEstim = 0.2
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    KeyboardComponent key_resp_overSTOP
      correctAns = space
      storeCorrect = True
      stopVal [duration (s)] = 0.2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine filler_11
    TextComponent text_71
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_72
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_73
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_74
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_75
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_76
      text [set every repeat] = $g
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    TextComponent text_77
      text [set every repeat] = $h
      stopVal [frame N] = 252
      durationEstim = 0.6
      startEstim = 3.6
      startVal [frame N] = 216
      letterHeight = 0.3
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    TextComponent text_78
      text [set every repeat] = $i
      stopVal [frame N] = 288
      durationEstim = 0.6
      startEstim = 4.2
      startVal [frame N] = 252
      letterHeight = 0.3
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    TextComponent text_79
      text [set every repeat] = $j
      stopVal [frame N] = 324
      durationEstim = 0.6
      startEstim = 4.8
      startVal [frame N] = 288
      letterHeight = 0.3
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    TextComponent text_80
      text [set every repeat] = $k
      stopVal [frame N] = 360
      durationEstim = 0.6
      startEstim = 5.4
      startVal [frame N] = 324
      letterHeight = 0.3
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  Routine filler_trial
    TextComponent text_14
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_15
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_36
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_61
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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  Routine break_2
    TextComponent text_13
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine stop_11
    ImageComponent image_5
      stopVal [frame N] = 324
      durationEstim = 0.6
      startEstim = 4.9
      units = cm
      startVal [frame N] = $SSD
      image = blue.jpg
      size = [5, 5]
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    TextComponent text_111
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_112
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_113
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_114
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_115
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_116
      text [set every repeat] = $g
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    TextComponent text_117
      text [set every repeat] = $h
      stopVal [frame N] = 252
      durationEstim = 0.6
      startEstim = 3.6
      startVal [frame N] = 216
      letterHeight = 0.3
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    TextComponent text_118
      text [set every repeat] = $i
      stopVal [frame N] = 288
      durationEstim = 0.6
      startEstim = 4.2
      startVal [frame N] = 252
      letterHeight = 0.3
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    TextComponent text_120
      text = X
      stopVal [frame N] = 324
      durationEstim = 0.6
      startEstim = 4.8
      startVal [frame N] = 288
      letterHeight = 0.3
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    KeyboardComponent key_resp_STOP_11
      correctAns = space
      storeCorrect = True
      stopVal [frame N] = 324
      durationEstim = 0.6
      forceEndRoutine = True
      startEstim = 4.8
      allowedKeys = 'space'
      startVal [frame N] = 288
      store = first key
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  Routine over_wrong
    TextComponent text_33
      text [set every repeat] = $j
      stopVal [frame N] = 24
      durationEstim = 0.4
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_34
      text [set every repeat] = $k
      stopVal [frame N] = 60
      durationEstim = 0.6
      startEstim = 0.4
      startVal [frame N] = 24
      letterHeight = 0.3
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    SoundComponent over_wrong_play
      sound [set every repeat] = $wrong_play
      stopVal [duration (s)] = 0.6
      startVal [time (s)] = 0.0
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  Routine phase_2_sheet
    TextComponent text_40
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        The experimenter will now hand you an instructional sheet for the next phase of the experiment.

        Press the spacebar after you have read and understood the instructions in that sheet.
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 3
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  Routine GO_8_fback_select
    CodeComponent code_7
      Begin Experiment:
        correct_run = 0
        wrong_run = 0
      Begin Routine:
        if key_resp_GO_8.corr == 1:
            correct_run = 1
            wrong_run = 0
        else:
            correct_run = 0
            wrong_run = 1
  Routine stop_11_fback_select
    CodeComponent code_11
      Begin Experiment:
        wrong_run = 0
        cond_run = 0
      Begin Routine:
        if key_resp_STOP_11.corr == 1:
            wrong_run = 1
            cond_run = 0
        if key_resp_STOP_11.corr == 0:
            wrong_run = 0
            cond_run = 1
  Routine STOP_trial
    ImageComponent STOP_Signal
      stopVal [frame N] = 108
      durationEstim = 0.5
      startEstim = 1.3
      units = cm
      startVal [frame N] = $SSD
      image = blue.jpg
      size = [5, 5]
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    TextComponent text_103
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0.0
      letterHeight = 0.3
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    TextComponent text_104
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_10
      text = X
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.20
      startVal [frame N] = 72
      letterHeight = 0.3
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    KeyboardComponent key_resp_STOP
      correctAns = space
      storeCorrect = True
      stopVal [frame N] = 108
      durationEstim = 0.6
      forceEndRoutine = False
      startEstim = 1.2
      allowedKeys = 'space'
      startVal [frame N] = 72
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  Routine add_six_letters
    TextComponent text_24
      text [set every repeat] = $c
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_25
      text [set every repeat] = $d
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_26
      text [set every repeat] = $e
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_27
      text [set every repeat] = $f
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_28
      text [set every repeat] = $g
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_29
      text [set every repeat] = $h
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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  Routine normal_2
    TextComponent text_41
      text [set every repeat] = $k
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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  Routine control_8
    ImageComponent image_2
      stopVal [frame N] = 216
      durationEstim = 0.5
      startEstim = 3.1
      units = cm
      startVal [frame N] = $SSD
      image = yellow.jpg
      size = [5, 5]
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    TextComponent text_86
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_87
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_88
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_89
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_90
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_91
      text [set every repeat] = $g
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    TextComponent text_92
      text [set every repeat] = $h
      stopVal [frame N] = 252
      durationEstim = 0.6
      startEstim = 3.6
      startVal [frame N] = 216
      letterHeight = 0.3
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  Routine Phase2_instructions
    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $signal_image
      size [set every repeat] = $image_size
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    TextComponent text_23
      text [set every repeat] = $letter
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_21
      text [set every repeat] = $instruction
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    KeyboardComponent key_resp_7
      correctAns = space
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 3
      store = first key
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    TextComponent text_38
      text [set every repeat] = $post
      pos = [0, -0.5]
      startVal [time (s)] = 3
      letterHeight = 0.06
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  Routine GO_11
    TextComponent text_53
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_54
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_55
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_56
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_57
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_58
      text [set every repeat] = $g
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    TextComponent text_59
      text [set every repeat] = $h
      stopVal [frame N] = 252
      durationEstim = 0.6
      startEstim = 3.6
      startVal [frame N] = 216
      letterHeight = 0.3
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    TextComponent text_60
      text [set every repeat] = $i
      stopVal [frame N] = 288
      durationEstim = 0.6
      startEstim = 4.2
      startVal [frame N] = 252
      letterHeight = 0.3
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    TextComponent text_47
      text = X
      stopVal [frame N] = 324
      durationEstim = 0.6
      startEstim = 4.8
      startVal [frame N] = 288
      letterHeight = 0.3
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    KeyboardComponent key_resp_GO_11
      correctAns = space
      storeCorrect = True
      stopVal [frame N] = 324
      durationEstim = 0.6
      forceEndRoutine = True
      startEstim = 4.8
      allowedKeys = 'space'
      startVal [frame N] = 288
      store = first key
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  Routine trial_type_select_P2
    CodeComponent code_9
      Begin Experiment:
        go_5_run = 0
        go_8_run = 0
        go_11_run = 0
        stop_5_run = 0
        stop_8_run = 0
        stop_11_run = 0
        control_5_run = 0
        control_8_run = 0
        control_11_run = 0
        break_run = 0
      Begin Routine:
        if Condition == 'GO' and length == 5:
            go_5_run = 1
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 0
            control_11_run = 0
            break_run = 0
        if Condition == 'GO' and length == 8:
            go_5_run = 0
            go_8_run = 1
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 0
            control_11_run = 0
            break_run = 0
        if Condition == 'GO' and length == 11:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 1
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 0
            control_11_run = 0
            break_run = 0
        if Condition == 'STOP' and length == 5:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 1
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 0
            control_11_run = 0
            break_run = 0
        if Condition == 'STOP' and length == 8:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 1
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 0
            control_11_run = 0
            break_run = 0
        if Condition == 'STOP' and length == 11:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 1
            control_5_run = 0
            control_8_run = 0
            control_11_run = 0
            break_run = 0
        if Condition == 'CONTROL' and length == 5:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 1
            control_8_run = 0
            control_11_run = 0
            break_run = 0
        if Condition == 'CONTROL' and length == 8:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 1
            control_11_run = 0
            break_run = 0
        if Condition == 'CONTROL' and length == 11:
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 0
            control_11_run = 1
            break_run = 0
        if Condition == 'BREAK':
            go_5_run = 0
            go_8_run = 0
            go_11_run = 0
            stop_5_run = 0
            stop_8_run = 0
            stop_11_run = 0
            control_5_run = 0
            control_8_run = 0
            control_11_run = 0
            break_run = 1
    TextComponent text_3
      text [set every repeat] = $a
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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  Routine GO_trial
    TextComponent text_7
      text = X
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    KeyboardComponent key_resp_3
      correctAns = space
      storeCorrect = True
      stopVal [duration (s)] = 0.6
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine correct
    TextComponent text_5
      text [set every repeat] = $k
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    SoundComponent sound_1
      sound [set every repeat] = $correct_play
      stopVal [duration (s)] = 0.5
      startEstim = 0
      startVal [frame N] = 0
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  Routine end_phase2
    TextComponent text_22
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have come to the end of this task.

        Please inform the experimenter, so that he can prepare the final task for this experiment.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 2
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  Routine control_11
    ImageComponent image_3
      stopVal [frame N] = 324
      durationEstim = 0.5
      startEstim = 4.9
      units = cm
      startVal [frame N] = $SSD
      image = yellow.jpg
      size = [5, 5]
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    TextComponent text_84
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_85
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_94
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_95
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_96
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_97
      text [set every repeat] = $g
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    TextComponent text_98
      text [set every repeat] = $h
      stopVal [frame N] = 252
      durationEstim = 0.6
      startEstim = 3.6
      startVal [frame N] = 216
      letterHeight = 0.3
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    TextComponent text_99
      text [set every repeat] = $i
      stopVal [frame N] = 288
      durationEstim = 0.6
      startEstim = 4.2
      startVal [frame N] = 252
      letterHeight = 0.3
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    TextComponent text_100
      text [set every repeat] = $j
      stopVal [frame N] = 324
      durationEstim = 0.6
      startEstim = 4.8
      startVal [frame N] = 288
      letterHeight = 0.3
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    TextComponent text_101
      text [set every repeat] = $k
      stopVal [frame N] = 360
      durationEstim = 0.6
      startEstim = 5.4
      startVal [frame N] = 324
      letterHeight = 0.3
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  Routine ready_set_go
    TextComponent text_17
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Place your index finger (of your dominant hand) on the spacebar.
        Wear the headphones so that you can receive the feedback tones.

        Press the spacebar to begin the block.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine welcome
    TextComponent text_16
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Welcome to the experiment.

        Please read the instructional sheet given. Please ask the experimenter if you have any questions.

        Once you have understood the instructions, press the spacebar to proceed.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine wrong
    TextComponent text_6
      text [set every repeat] = $k
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    SoundComponent sound_2
      sound [set every repeat] = $wrong_play
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
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  Routine Phase1_instructions
    TextComponent text_18
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        You will see a continuous stream of letters.

        YOUR TASK:
        When the letter X appears in that stream, press the spacebar as quickly as you can.
        Ignore all other letters.
    TextComponent text_19
      text = X
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_20
      pos = [0, -0.5]
      startVal [time (s)] = 3
      letterHeight = 0.06
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      text:
        If you have any questions, please ask the experimenter now.

        Otherwise, press the spacebar to proceed.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 3
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  Routine length_select
    CodeComponent length_selecting
      Begin Experiment:
        eight=0
        eleven=0
      Begin Routine:
        if length == 5:
            eight = 0
            eleven = 0
        if length == 8:
            eight = 1
            eleven = 0
        if length == 11:
            eight = 0
            eleven = 1
  Routine GO_8
    TextComponent text_48
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_49
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_50
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_51
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_52
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_46
      text = X
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    KeyboardComponent key_resp_GO_8
      correctAns = space
      storeCorrect = True
      stopVal [frame N] = 216
      durationEstim = 0.6
      forceEndRoutine = True
      startEstim = 3
      allowedKeys = 'space'
      startVal [frame N] = 180
      store = first key
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  Routine repeat_instruc
    TextComponent text_39
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Do you need the instructions to be repeated?

        Press 'Y' if you want to read the instructions again.
        Otherwise, press 'N' to proceed.
    KeyboardComponent key_resp_9
      correctAns = 'y'
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
      store = first key
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  Routine repeat_select
    CodeComponent code_5
      Begin Experiment:
        rep = 1
      Begin Routine:
        if key_resp_9.corr == 1:
            rep = 1
        else:
            rep = 0
  Routine block_select
    CodeComponent code
      Begin Experiment:
        correct_run = 0
        wrong_run = 0
      Begin Routine:
        if key_resp_GO_5.corr == 1:
            correct_run = 1
            wrong_run = 0
        else:
            correct_run = 0
            wrong_run = 1
  Routine stop_8
    ImageComponent image_4
      stopVal [frame N] = 216
      durationEstim = 0.5
      startEstim = 3.1
      units = cm
      startVal [frame N] = $SSD
      image = blue.jpg
      size = [5, 5]
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    TextComponent text_105
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_106
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_107
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_108
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_109
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_110
      text = X
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    KeyboardComponent key_resp_STOP_8
      correctAns = space
      storeCorrect = True
      stopVal [frame N] = 216
      durationEstim = 0.6
      forceEndRoutine = True
      startEstim = 3
      allowedKeys = 'space'
      startVal [frame N] = 180
      store = first key
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  Routine filler_8
    TextComponent text_63
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_64
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_65
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_66
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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    TextComponent text_67
      text [set every repeat] = $f
      stopVal [frame N] = 180
      durationEstim = 0.6
      startEstim = 2.4
      startVal [frame N] = 144
      letterHeight = 0.3
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    TextComponent text_68
      text [set every repeat] = $g
      stopVal [frame N] = 216
      durationEstim = 0.6
      startEstim = 3
      startVal [frame N] = 180
      letterHeight = 0.3
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    TextComponent text_69
      text [set every repeat] = $h
      stopVal [frame N] = 252
      durationEstim = 0.6
      startEstim = 3.6
      startVal [frame N] = 216
      letterHeight = 0.3
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text [set every repeat] = $a
      stopVal [frame N] = 35
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_2
      text [set every repeat] = $b
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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  Routine control_trial
    ImageComponent control_signal
      stopVal [frame N] = 108
      durationEstim = 0.5
      startEstim = 1.3
      units = cm
      startVal [frame N] = $SSD
      image = yellow.jpg
      size = [5, 5]
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    TextComponent text_11
      text [set every repeat] = $b
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_12
      text [set every repeat] = $c
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_37
      text [set every repeat] = $d
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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    TextComponent text_82
      text [set every repeat] = $e
      stopVal [frame N] = 144
      durationEstim = 0.6
      startEstim = 1.8
      startVal [frame N] = 108
      letterHeight = 0.3
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  Routine GO_11_fback_select
    CodeComponent code_8
      Begin Experiment:
        correct_run = 0
        wrong_run = 0
      Begin Routine:
        if key_resp_GO_11.corr == 1:
            correct_run = 1
            wrong_run = 0
        else:
            correct_run = 0
            wrong_run = 1
  Routine add_three_letters
    TextComponent text_4
      text [set every repeat] = $c
      stopVal [frame N] = 36
      durationEstim = 0.6
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.3
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    TextComponent text_8
      text [set every repeat] = $d
      stopVal [frame N] = 72
      durationEstim = 0.6
      startEstim = 0.6
      startVal [frame N] = 36
      letterHeight = 0.3
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    TextComponent text_9
      text [set every repeat] = $e
      stopVal [frame N] = 108
      durationEstim = 0.6
      startEstim = 1.2
      startVal [frame N] = 72
      letterHeight = 0.3
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  Routine stop_8_fback_select
    CodeComponent code_10
      Begin Experiment:
        wrong_run = 0
        cond_run = 0
      Begin Routine:
        if key_resp_STOP_8.corr == 1:
            wrong_run = 1
            cond_run = 0
        if key_resp_STOP_8.corr == 0:
            wrong_run = 0
            cond_run = 1
Flow
  Routine welcome
  Routine Phase1_instructions
  Routine ready_set_go
  LoopInitiator phase1_block_loop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_10 loopType="TrialHandler"
      conditionsFile = Stimuli control (Experiment Phase 1).xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'a': u'M', u'c': u'R', u'b': u'P', u'e': u'Z', u'd': u'V', u'g': u'G', u'f': u'I', u'i': u'F', u'h': u'B', u'k': u'C', u'j': u'O', u'length': 5, u'msg': u'You have come to the end of a block. You may take a short break.\n\nPress the spacebar to start the next block.', u'SSD': 0, u'wrong_play': u'Incorrect.ogg', u'Condition': u'GO', u'correct_play': u'Correct.ogg'},
        {u'a': u'J', u'c': u'A', u'b': u'I', u'e': u'Z', u'd': u'N', u'g': u'U', u'f': u'Y', u'i': u'K', u'h': u'R', u'k': u'S', u'j': u'L', u'length': 8, u'msg': u'You have come to the end of a block. You may take a short break.\n\nPress the spacebar to start the next block.', u'SSD': 0, u'wrong_play': u'Incorrect.ogg', u'Condition': u'GO', u'correct_play': u'Correct.ogg'},
        {u'a': u'F', u'c': u'S', u'b': u'Y', u'e': u'W', u'd': u'E', u'g': u'I', u'f': u'M', u'i': u'K', u'h': u'N', u'k': u'U', u'j': u'V', u'length': 11, u'msg': u'You have come to the end of a block. You may take a short break.\n\nPress the spacebar to start the next block.', u'SSD': 0, u'wrong_play': u'Incorrect.ogg', u'Condition': u'GO', u'correct_play': u'Correct.ogg'},
        {u'a': u'Q', u'c': u'S', u'b': u'I', u'e': u'H', u'd': u'U', u'g': u'R', u'f': u'P', u'i': u'B', u'h': u'W', u'k': u'Z', u'j': u'V', u'length': 5, u'msg': u'You have come to the end of a block. You may take a short break.\n\nPress the spacebar to start the next block.', u'SSD': 0, u'wrong_play': u'Incorrect.ogg', u'Condition': u'GO', u'correct_play': u'Correct.ogg'}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
      Routine trial_type_select
      LoopInitiator go_5_loop loopType="TrialHandler"
        loopType = sequential
        nReps = go_5_run
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        Routine GO_5
        Routine block_select
        LoopInitiator GO_5_correct loopType="TrialHandler"
          loopType = sequential
          nReps = correct_run
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          Routine correct
        LoopTerminator GO_5_correct
        LoopInitiator GO_5_wrong loopType="TrialHandler"
          loopType = sequential
          nReps = wrong_run
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          Routine wrong
        LoopTerminator GO_5_wrong
      LoopTerminator go_5_loop
      LoopInitiator go_8_loop loopType="TrialHandler"
        loopType = sequential
        nReps = go_8_run
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        Routine GO_8
        Routine GO_8_fback_select
        LoopInitiator GO_8_correct loopType="TrialHandler"
          loopType = sequential
          nReps = correct_run
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          Routine correct
        LoopTerminator GO_8_correct
        LoopInitiator GO_8_wrong loopType="TrialHandler"
          loopType = sequential
          nReps = wrong_run
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          Routine wrong
        LoopTerminator GO_8_wrong
      LoopTerminator go_8_loop
      LoopInitiator go_11_loop loopType="TrialHandler"
        loopType = random
        nReps = go_11_run
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        Routine GO_11
        Routine GO_11_fback_select
        LoopInitiator go_11_correct loopType="TrialHandler"
          loopType = sequential
          nReps = correct_run
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          Routine correct
        LoopTerminator go_11_correct
        LoopInitiator go_11_wrong loopType="TrialHandler"
          loopType = sequential
          nReps = wrong_run
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          Routine wrong
        LoopTerminator go_11_wrong
      LoopTerminator go_11_loop
      LoopInitiator filler_5_loop loopType="TrialHandler"
        loopType = sequential
        nReps = filler_5_run
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        Routine filler_trial
      LoopTerminator filler_5_loop
      LoopInitiator filler_8_loop loopType="TrialHandler"
        loopType = sequential
        nReps = filler_8_run
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        Routine filler_8
      LoopTerminator filler_8_loop
      LoopInitiator filler_11_loop loopType="TrialHandler"
        loopType = random
        nReps = filler_11_run
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        Routine filler_11
      LoopTerminator filler_11_loop
    LoopTerminator trials_10
    Routine break_2
  LoopTerminator phase1_block_loop
  Routine phase_2_sheet
  Routine ready_set_go
  LoopInitiator phase_2 loopType="TrialHandler"
    conditionsFile = Stimuli Control (Experimental V1)_12blockswithmsg.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'a': u'F', u'c': u'M', u'b': u'P', u'e': u'R', u'd': u'V', u'g': u'Q', u'f': u'L', u'i': u'O', u'h': u'G', u'k': u'W', u'j': u'Z', u'length': 11, u'delay': 0.15, u'Randmix': 0.8951604649955698, u'Block': 1, u'msg': u'nil', u'SSD': 297, u'wrong_play': u'Incorrect.ogg', u'check': 0, u'Condition': u'CONTROL', u'correct_play': u'Correct.ogg'},
      {u'a': u'J', u'c': u'E', u'b': u'R', u'e': u'I', u'd': u'D', u'g': u'W', u'f': u'Q', u'i': u'M', u'h': u'B', u'k': u'A', u'j': u'T', u'length': 5, u'delay': 0, u'Randmix': 0.4057517188866768, u'Block': 1, u'msg': u'nil', u'SSD': 72, u'wrong_play': u'Incorrect.ogg', u'check': 0, u'Condition': u'GO', u'correct_play': u'Correct.ogg'},
      {u'a': u'R', u'c': u'B', u'b': u'Z', u'e': u'G', u'd': u'I', u'g': u'A', u'f': u'D', u'i': u'T', u'h': u'N', u'k': u'P', u'j': u'Q', u'length': 11, u'delay': 0, u'Randmix': 0.9979151751258541, u'Block': 1, u'msg': u'nil', u'SSD': 288, u'wrong_play': u'Incorrect.ogg', u'check': 0, u'Condition': u'GO', u'correct_play': u'Correct.ogg'},
      {u'a': u'Z', u'c': u'A', u'b': u'K', u'e': u'R', u'd': u'Y', u'g': u'B', u'f': u'C', u'i': u'G', u'h': u'S', u'k': u'W', u'j': u'M', u'length': 8, u'delay': 0, u'Randmix': 0.2884192381716275, u'Block': 1, u'msg': u'nil', u'SSD': 180, u'wrong_play': u'Incorrect.ogg', u'check': 0, u'Condition': u'GO', u'correct_play': u'Correct.ogg'}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
    Routine trial_type_select_P2
    LoopInitiator go_5_loop_P2 loopType="TrialHandler"
      loopType = sequential
      nReps = go_5_run
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      Routine GO_5
      Routine block_select
      LoopInitiator GO_5_correct_p2 loopType="TrialHandler"
        loopType = sequential
        nReps = correct_run
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        Routine correct
      LoopTerminator GO_5_correct_p2
      LoopInitiator GO_5_wrong_p2 loopType="TrialHandler"
        loopType = sequential
        nReps = wrong_run
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        Routine wrong
      LoopTerminator GO_5_wrong_p2
    LoopTerminator go_5_loop_P2
    LoopInitiator go_8_loop_p2 loopType="TrialHandler"
      loopType = sequential
      nReps = go_8_run
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      Routine GO_8
      Routine GO_8_fback_select
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = sequential
        nReps = correct_run
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        Routine correct
      LoopTerminator trials_2
      LoopInitiator trials_3 loopType="TrialHandler"
        loopType = random
        nReps = wrong_run
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        Routine wrong
      LoopTerminator trials_3
    LoopTerminator go_8_loop_p2
    LoopInitiator go_11_loop_p2 loopType="TrialHandler"
      loopType = random
      nReps = go_11_run
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      Routine GO_11
      Routine GO_11_fback_select
      LoopInitiator trials_4 loopType="TrialHandler"
        loopType = sequential
        nReps = correct_run
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        Routine correct
      LoopTerminator trials_4
      LoopInitiator trials_6 loopType="TrialHandler"
        loopType = sequential
        nReps = wrong_run
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        Routine wrong
      LoopTerminator trials_6
    LoopTerminator go_11_loop_p2
    LoopInitiator stop_5_loop loopType="TrialHandler"
      loopType = sequential
      nReps = stop_5_run
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      Routine STOP_trial
      Routine block_select2
      LoopInitiator trials_5 loopType="TrialHandler"
        loopType = sequential
        nReps = wrong_run
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        Routine wrong
      LoopTerminator trials_5
      LoopInitiator trials loopType="TrialHandler"
        loopType = sequential
        nReps = cond_run
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        Routine normal_2
      LoopTerminator trials
    LoopTerminator stop_5_loop
    LoopInitiator stop_8_loop loopType="TrialHandler"
      loopType = random
      nReps = stop_8_run
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      Routine stop_8
      Routine stop_8_fback_select
      LoopInitiator stop_8_wrong loopType="TrialHandler"
        loopType = sequential
        nReps = wrong_run
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        Routine wrong
      LoopTerminator stop_8_wrong
      LoopInitiator stop_8_normal loopType="TrialHandler"
        loopType = random
        nReps = cond_run
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        Routine normal_2
      LoopTerminator stop_8_normal
    LoopTerminator stop_8_loop
    LoopInitiator stop_11_loop loopType="TrialHandler"
      loopType = sequential
      nReps = stop_11_run
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      Routine stop_11
      Routine stop_11_fback_select
      LoopInitiator stop_11_wrong loopType="TrialHandler"
        loopType = sequential
        nReps = wrong_run
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        Routine wrong
      LoopTerminator stop_11_wrong
      LoopInitiator stop_11_normal loopType="TrialHandler"
        loopType = random
        nReps = cond_run
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        Routine normal_2
      LoopTerminator stop_11_normal
    LoopTerminator stop_11_loop
    LoopInitiator control_5_loop loopType="TrialHandler"
      loopType = sequential
      nReps = control_5_run
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      Routine control_trial
    LoopTerminator control_5_loop
    LoopInitiator control_8_loop loopType="TrialHandler"
      loopType = sequential
      nReps = control_8_run
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      Routine control_8
    LoopTerminator control_8_loop
    LoopInitiator control_11_loop loopType="TrialHandler"
      loopType = random
      nReps = control_11_run
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      Routine control_11
    LoopTerminator control_11_loop
    LoopInitiator break_loop loopType="TrialHandler"
      loopType = sequential
      nReps = break_run
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      Routine break_2
    LoopTerminator break_loop
  LoopTerminator phase_2
  Routine end_phase2
